;t1ir
;avance-version (12/01/11)
;T1 measurement using inversion recovery
;Trigger for NMR low field shuttle
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>


"p2=p1*2"
"d12=30m"


"acqt0=-p1*2/3.1416"

1 ze

define delay dmot
"dmot = vd - (d10*2 - d9 + cnst11 + cnst12 + cnst20 + cnst30 + cnst31)*0"

2 d1
  p2 ph1

	d10
	; execute variable delay
	dmot
	d10

	; extra delay for positioning
	d11

  p1 ph2
  go=2 ph31
  d12 wr #0 if #0 ivd
  lo to 1 times td1
exit


ph1=0 2 
ph2=0 0 2 2 1 1 3 3
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d10: Motor motion time
;d11 : positioning delay
;d12: delay for disk I/O                             [30 msec]
;vd : variable delay, taken from vd-list
;ns: 8 * n
;ds: 4
;td1: number of experiments = number of delays in vd-list
;FnMODE: undefined

;define VDLIST

;this pulse program produces a ser-file (PARMOD = 2D)



;$Id: t1ir,v 1.13 2012/01/31 17:49:28 ber Exp $
